/*
#-*-#
### balannce.hoc
----------------
This scipt contains a function that balances the currents for the membrane to comply with the resting potential. It reads all the membrane currents and writes to the leak and pump conductance.

This function is called after the first initialization.
#-*-#
*/
Vrest = -55
proc balance(){
    forall {
	if ((-(ina_navv1p8 + \
	ina_nakpump + ina_Nav1_3 + ina_nattxs) / (Vrest - ena)) < 0) {
	    pumpina_extrapump = \
	    -(ina_navv1p8 + \
			ina_nakpump + ina_Nav1_3 + ina_nattxs)
	} else {
	    gnaleak_leak = -(ina_navv1p8 + \
			ina_nakpump + ina_Nav1_3 + ina_nattxs) / (Vrest - ena)
	}
	
	if ((-(ik_kdr + \
	ik_kad + \
	ik_kap + \
	ik_nakpump) / (Vrest - ek)) < 0) {
	    pumpik_extrapump = -(ik_kdr + \
		ik_kad + \
		ik_kap + \
		ik_nakpump)
	} else {
	    gkleak_leak = -(ik_kdr + \
			ik_kad + \
			ik_kap + \
			ik_nakpump) / (Vrest - ek)
	}
    }
}